opentrons/protocol-designer 5.2.3
schemaVersion: 3
protocolName: ZymoBIOMICS 96 MagBead DNA Kit KingFisher Setup
author: Luke Thompson & Jean Lim
description: Fill plates for a KingFisher run using the ZymoBIOMICS 96 MagBead DNA Kit
robot: {model: OT-2 Standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p300_multi_gen2: {mount: left}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, slot: 12}
  Opentrons 96 Filter Tip Rack 200 µL: {definitionId: opentrons/opentrons_96_filtertiprack_200ul/1, slot: 10}
  Elution: {definitionId: custom_beta/kingfisher_96_wellplate_2250ul/1, slot: 7}
  Wash 1: {definitionId: custom_beta/kingfisher_96_wellplate_2250ul/1, slot: 4}
  Sample 3: {definitionId: custom_beta/kingfisher_96_wellplate_2250ul/1, slot: 11}
  Sample 2: {definitionId: custom_beta/kingfisher_96_wellplate_2250ul/1, slot: 8}
  Sample 1: {definitionId: custom_beta/kingfisher_96_wellplate_2250ul/1, slot: 5}
  Wash 2-2: {definitionId: custom_beta/kingfisher_96_wellplate_2250ul/1, slot: 9}
  Wash 2-1: {definitionId: custom_beta/kingfisher_96_wellplate_2250ul/1, slot: 6}
  Wash 2 Reservoir: {definitionId: opentrons/nest_1_reservoir_195ml/1, slot: 3}
  MagBinding Reservoir: {definitionId: opentrons/nest_1_reservoir_195ml/1, slot: 2}
  Water-Wash1-Beads Reservoir: {definitionId: opentrons/nest_12_reservoir_15ml/1, slot: 1}
pipetteTiprackAssignments:
  p300_multi_gen2: opentrons/opentrons_96_filtertiprack_200ul/1
ingredients:
  - Water: {description: DNase/RNase-free Water}
  - Wash 1: {description: ZymoBIOMICS MagWash 1}
  - Wash 2: {description: ZymoBIOMICS MagWash 2}
  - MagBinding: {description: ZymoBIOMICS MagBinding Buffer}
  - Beads: {description: ZymoBIOMICS MagBinding Beads}
ingredLocations:
  Water-Wash1-Beads Reservoir:
    Water {volume: 9000}: A1, A2
    Wash 1 {volume: 13000}: A5-A8
    Beads {volume: 3000}: A12
  MagBinding Reservoir:
    MagBinding {volume: 180000}: A1
  Wash 2 Reservoir:
    Wash 2 {volume: 180000}: A1
savedStepForms:
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 600
  path: single
  changeTip: once
  aspirate_labware: MagBinding Reservoir
  aspirate_wells: A1
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  aspirate_mmFromBottom: 1
  dispense_labware: Sample 1
  dispense_wells: A1-A12
  dispense_mmFromBottom: 2.5
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 600
  path: single
  changeTip: never
  aspirate_labware: MagBinding Reservoir
  aspirate_wells: A1
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  aspirate_mmFromBottom: 1
  dispense_labware: Sample 2
  dispense_wells: A1-A12
  dispense_mmFromBottom: 2.5
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 600
  path: single
  changeTip: never
  aspirate_labware: MagBinding Reservoir
  aspirate_wells: A1
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  aspirate_mmFromBottom: 1
  dispense_labware: Sample 3
  dispense_wells: A1-A12
  dispense_mmFromBottom: 2.5
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 25
  path: single
  changeTip: once
  aspirate_labware: Water-Wash1-Beads Reservoir
  aspirate_wells: A12
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  aspirate_mix_checkbox: true
  aspirate_mix_times: 10
  aspirate_mix_volume: 25
  aspirate_mmFromBottom: 1
  dispense_labware: Sample 1
  dispense_wells: A1-A12
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 25
  dispense_mmFromBottom: 2.5
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 500
  path: single
  changeTip: once
  aspirate_labware: Water-Wash1-Beads Reservoir
  aspirate_wells: A5
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  aspirate_mmFromBottom: 1
  dispense_labware: Wash 1
  dispense_wells: A1-A3
  dispense_mmFromBottom: 2.5
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 500
  path: single
  changeTip: never
  aspirate_labware: Water-Wash1-Beads Reservoir
  aspirate_wells: A6
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  aspirate_mmFromBottom: 1
  dispense_labware: Wash 1
  dispense_wells: A4-A6
  dispense_mmFromBottom: 2.5
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 500
  path: single
  changeTip: never
  aspirate_labware: Water-Wash1-Beads Reservoir
  aspirate_wells: A7
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  aspirate_mmFromBottom: 1
  dispense_labware: Wash 1
  dispense_wells: A7-A9
  dispense_mmFromBottom: 2.5
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 500
  path: single
  changeTip: never
  aspirate_labware: Water-Wash1-Beads Reservoir
  aspirate_wells: A8
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  aspirate_mmFromBottom: 1
  dispense_labware: Wash 1
  dispense_wells: A10-A12
  dispense_mmFromBottom: 2.5
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 900
  path: single
  changeTip: once
  aspirate_labware: Wash 2 Reservoir
  aspirate_wells: A1
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  aspirate_mmFromBottom: 1
  dispense_labware: Wash 2-1
  dispense_wells: A1-A12
  dispense_mmFromBottom: 2.5
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 900
  path: single
  changeTip: never
  aspirate_labware: Wash 2 Reservoir
  aspirate_wells: A1
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  aspirate_mmFromBottom: 1
  dispense_labware: Wash 2-2
  dispense_wells: A1-A12
  dispense_mmFromBottom: 2.5
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 150
  path: single
  changeTip: once
  aspirate_labware: Water-Wash1-Beads Reservoir
  aspirate_wells: A1
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  aspirate_mmFromBottom: 1
  dispense_labware: Elution
  dispense_wells: A1-A6
  dispense_mmFromBottom: 2.5
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 150
  path: single
  changeTip: never
  aspirate_labware: Water-Wash1-Beads Reservoir
  aspirate_wells: A2
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  aspirate_mmFromBottom: 1
  dispense_labware: Elution
  dispense_wells: A7-A12
  dispense_mmFromBottom: 2.5
  blowout_checkbox: true
  blowout_location: dest_well
labwareDefinitions:
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  custom_beta/kingfisher_96_wellplate_2250ul/1:
    brand: {brand: KingFisher, brandId: [95040450]}
    metadata: {displayName: KingFisher 96 Well Plate 2250 µL, displayCategory: wellPlate, displayVolumeUnits: µL, tags: []}
    dimensions: {xDimension: 128, yDimension: 85.5, zDimension: 43.5}
    parameters: {format: irregular, quirks: [], isTiprack: false, isMagneticModuleCompatible: false, loadName: kingfisher_96_wellplate_2250ul}
    namespace: custom_beta
    version: 1
    wells:
      A1: {depth: 43, totalLiquidVolume: 2250, shape: rectangular, xDimension: 8, yDimension: 8, x: 15, y: 74, z: 0.5}
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commands:
- pickUpTip: {pipette: p300_multi_gen2, labware: Opentrons 96 Filter Tip Rack 200 µL, well: A1}
- aspirate: {pipette: p300_multi_gen2, volume: 200, labware: MagBinding Reservoir, well: A1, offsetFromBottomMm: 1, flowRate: 94}
- dispense: {pipette: p300_multi_gen2, volume: 200, labware: Sample 1, well: A1, offsetFromBottomMm: 2.5, flowRate: 94}
- blowout: {pipette: p300_multi_gen2, labware: Sample 1, well: A1, flowRate: 94, offsetFromBottomMm: 43}
- aspirate: {pipette: p300_multi_gen2, volume: 200, labware: MagBinding Reservoir, well: A1, offsetFromBottomMm: 1, flowRate: 94}
- dispense: {pipette: p300_multi_gen2, volume: 200, labware: Sample 1, well: A1, offsetFromBottomMm: 2.5, flowRate: 94}
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